---
API: 2.1
OpenSesame: 3.2.0
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/GitHub/color-pupil-experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background "#7F7F7F"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2 always

define sketchpad fixation_point
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define inline_script init_var
	set description "Executes Python code"
	___run__
	var.letters = ['F', 'J', 'W', 'H', 'Z', 'Q', 'E', 'X', 'A']
	var.loops = 10
	var.numTrials = 5
	__end__
	set _prepare ""

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	import random
	import time
	
	letterListRed = []
	letterListBlue = []
	
	for i in range(var.loops):
		letterListRed.append(var.letters[random.randint(0, len(var.letters) -1)])
		letterListBlue.append(var.letters[random.randint(0, len(var.letters) -1)])
		while letterListBlue[i] == letterListBlue[i-1] and i > 1:
			letterListBlue[i] = var.letters[random.randint(0, len(var.letters) -1)]
		while letterListRed[i] == letterListBlue[i] or (letterListRed[i] == letterListRed[i-1] and i > 1): 
			letterListRed[i] = var.letters[random.randint(0, len(var.letters) -1)]
	
	
	loopcounter = 0
	__end__
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	
	loopcounter += 1
	__end__
	set _prepare ""

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
	from psychopy import visual, event, core
	import gc
	import numpy as np
	import random
	import os
	import re
	import scipy.misc
	import sys
	
	class settings(object):
		presentationTime = (100) # In milliseconds
		loops = (70)
		totalTrials = (5)
		myKeyboard = keyboard()
		orientations = {"left" : (-256, 0), "right" : (256, 0)}
		tones = ("bright", "dark")
		redColours = {"bright" : "#FF0000", "dark" : "#A80000"}
		blueColours = {"bright" : "#0000FF", "dark" : "#0000A8"}
		defaultContrast = (0.75)
		contrastParameter = (0.05)
	
	class experiment(settings):	
		def __init__(self, practice = False):
			self.practice = practice
		
		def getLetters(self):
			'''Gets letters from the "letters" folder and generates an array from them'''
			lettersPath = exp.experiment_path + "\letters/"
			experiment.letters = os.listdir(lettersPath)
			experiment.lettersArray = {}
			for letter in range(len(experiment.letters)):
				experiment.letters[letter] = str(re.search('(.?).png', experiment.letters[letter]).group(1))
				array = scipy.misc.imread(lettersPath + experiment.letters[letter] + ".png") * 0.00075
				experiment.lettersArray.update({experiment.letters[letter]:array[::-1]})
			if not experiment.letters:
				raise Exception("Failed to find letters! Add a directory named \"letters\" and add the letter files as \".png\" files!")
			return(experiment.letters, experiment.lettersArray)
		
		def getWeights(self):
			'''Sets weights for which a letter will appear on the red or the blue stimuli'''
			random.shuffle(experiment.letters)
			experiment.redWeights = experiment.letters[:len(experiment.letters)/2] 
			return experiment.redWeights
		
		def showInstructions(self):
			'''Presents instructions to the user'''
			instructions = visual.TextStim(win, text= "Please, count how many times the target letter appears", color='black', pos=(0, 256), height=32, wrapWidth=800)
			experiment.pressKeyText = visual.TextStim(win, text= "Press any key to continue.", color='black', pos=(0, -256), height=26, wrapWidth=800)
			instructions.draw()
			experiment.pressKeyText.draw()
			win.flip()
			self.myKeyboard.get_key()
			self.myKeyboard.flush()
			return experiment.pressKeyText
			
		def resetContrasts(self):
			'''Resets contrasts to the default value at the start of the experiment'''
			experiment.brightRedContrast = 	experiment.darkRedContrast = experiment.brightBlueContrast = experiment.darkBlueContrast = self.defaultContrast
			return(experiment.brightRedContrast, experiment.darkRedContrast, experiment.brightBlueContrast, experiment.darkBlueContrast)
			
		def run(self):
			'''Runs the actual experiment'''
			newTrial = trial()
			newTrial.setup()
			newTrial.showTarget()
			startTime = 0
			for loop in range(self.loops):
				startTime = clock.time()
				newTrial.presentStimulus(loop)
				core.wait(self.presentationTime * 0.001 * 0.7) # 70ms + 30 from processing the code
				#9print(clock.time() - startTime)
			newTrial.getAnswer(self)
			
		def start(self):
			'''Initilializes the experiment'''
			self.getLetters()
			self.getWeights()
			self.resetContrasts()
			self.showInstructions()
			while self.practice == True:
				self.run()
			print("Success.")
			self.getWeights()
			for trials in range(self.totalTrials):
				self.run()
	
	class trial(experiment):
		def setup(self):
			'''General trial set up'''
			self.setTarget()
			self.setupStimuli()
			self.setupArrow()
			gc.collect()
			
		def setTarget(self):
			'''Sets the target and the letter pools'''
			trial.target = random.choice(experiment.letters)
			trial.nonTargets = []
			trial.targetPool = []
			trial.nonTargetPool = []
			trial.red = []
			trial.blue = []
			trial.targetChance = random.uniform(0,1)
			for letter in experiment.letters:
				if letter != trial.target:
					trial.nonTargets.append(letter)
			for loop in range(self.loops):
				trial.targetPool.append(random.choice(experiment.letters))
				trial.nonTargetPool.append(random.choice(trial.nonTargets))
				while trial.targetPool[loop] == trial.targetPool[loop - 1] and loop > 1:
					trial.targetPool[loop] = random.choice(experiment.letters)
				while (trial.nonTargetPool[loop] == trial.nonTargetPool[loop - 1] and loop > 1) or trial.nonTargetPool[loop] == trial.targetPool[loop]:
					trial.nonTargetPool[loop] = random.choice(trial.nonTargets)
			if (trial.target in experiment.redWeights and trial.targetChance <= 0.8 ) or (trial.target not in experiment.redWeights and trial.targetChance > 0.8):
				trial.red = trial.targetPool
				trial.blue = trial.nonTargetPool
			else:
				trial.red = trial.nonTargetPool
				trial.blue = trial.targetPool	
			return(trial.target, trial.nonTargets, trial.targetPool, trial.nonTargetPool, trial.red, trial.blue, trial.targetChance)
		
		def setupStimuli(self):
			'''Sets up the properties of the stimuli to be presented on the current trial'''
			trial.redTone = random.choice(self.tones)
			trial.blueTone = random.choice(self.tones)
			trial.redContrast = experiment.brightRedContrast if trial.redTone == "bright" else experiment.darkRedContrast
			trial.blueContrast = experiment.brightBlueContrast if trial.blueTone == "bright" else experiment.darkBlueContrast	
			trial.posRed = random.choice(("left", "right"))
			trial.posBlue = next(pos for pos in ("left", "right") if pos not in trial.posRed)
			#trial.posBlue = next(iter(set(("left", "right")) - set (trial.posRed)))	
			#print("Red is the target:", trial.red == trial.targetPool, "Chance:", trial.targetChance, "Red position:", trial.posRed, "Arrow:", trial.arrowOrientation)
			return(trial.posRed, trial.posBlue, trial.redTone, trial.blueTone, trial.redContrast, trial.blueContrast)
			
		def setupArrow(self):
			'''Sets up where will the arrow point'''
			trial.arrowChance = random.uniform(0,1)
			trial.arrowOrientation = "left"
			trial.arrowCorrect = False
			if ((
			trial.red == trial.targetPool and ((trial.targetChance <= 0.8 and trial.posRed == "left") 
			or (trial.targetChance > 0.8 and trial.posRed == "right"))) 
			or (trial.blue == trial.targetPool and ((trial.targetChance <= 0.8 and trial.posRed == "right")
			or (trial.targetChance > 0.8 and trial.posRed == "left")))):
				trial.arrowOrientation = "left"
			else: 
				trial.arrowOrientation = "right"	
			if ((trial.red == trial.targetPool and trial.arrowOrientation == trial.posRed) or
			(trial.blue == trial.targetPool and trial.arrowOrientation == trial.posBlue)):
				trial.arrowCorrect = True
			else:
				trial.arrowCorrect = False		
			return( trial.arrowOrientation, trial.arrowCorrect)
		
		def presentStimulus(self, loopcounter):
			'''Presents a single set of stimuli'''
			redTex = np.random.uniform(0.25, 1, (256,256, 4)) + experiment.lettersArray[trial.red[loopcounter - 1]]
			blueTex = np.random.uniform(0.25, 1, (256,256, 4)) + experiment.lettersArray[trial.blue[loopcounter -1]]
			redCircle = visual.GratingStim(
				win, 
				tex = redTex, 
				mask = 'raisedCos', 
				color = trial.redColours[trial.redTone], 
				size =256, 
				pos = self.orientations[trial.posRed], 
				contrast=trial.redContrast)
			
			blueCircle = visual.GratingStim(
				win, 
				tex=blueTex, 
				mask ='raisedCos', 
				color = trial.blueColours[trial.blueTone], 
				size = 256, 
				pos = self.orientations[trial.posBlue],
				contrast = trial.blueContrast)
			
			arrowVert = [(-0.4,0.05),(-0.4,-0.05),(-.2,-0.05),(-.2,-0.1),(0,0),(-.2,0.1),(-.2,0.05)] 
			arrow = visual.ShapeStim(win, vertices=arrowVert, fillColor='green', size=256, lineColor='black', pos=(64, 0))
			if trial.arrowOrientation == "left":
				arrow.vertices = np.negative(arrowVert)
				arrow.pos = (-64, 0)
			fixation = visual.TextStim(win, text="+", height=20, pos=(0,2), color="black")
			redCircle.draw()
			blueCircle.draw()
			arrow.draw()
			fixation.draw()
			win.flip()	
		
		def showTarget(self):
			'''Shows the target to the user'''
			targetText = visual.TextStim(win, text = trial.target, color='green', pos=(0, 128), height=64, wrapWidth=700)
			targetText.draw()
			experiment.pressKeyText.draw()
			win.flip()
			self.myKeyboard.get_key()	
			self.myKeyboard.flush()
			
		def answerScreen(self):
			'''Prompts screen asking for an answer'''
			trial.keysString = ""
			while True:
				answerInstructionsText = visual.TextStim(
					win, 
					text = "How many times did you see letter " + trial.target + "?", 
					color = 'black', 
					pos = (0, 128), 
					height = 24, 
					wrapWidth = 700 )
				answerText = visual.TextStim(win, text = trial.keysString + "_", color='black', pos=(0, -128), height=18, wrapWidth=700)
				submitText = visual.TextStim(win, text = "Press Enter to submit", color='black', pos=(0, -256), height=18, wrapWidth=700)
				answerInstructionsText.draw()
				answerText.draw()
				submitText.draw()
				win.flip()
				keys = self.myKeyboard.get_key()
				if 'return' in keys:
					break
				elif 'backspace' in keys:
					trial.keysString = trial.keysString[:-1]
				elif len(keys[0]) > 1:
					trial.keysString = trial.keysString + " "
				else:
					trial.keysString = trial.keysString + keys[0]
			self.myKeyboard.flush()
			return trial.keysString
		
		def getAnswer(self, experiment):
			'''Retrieves the answer'''
			self.answerScreen()
			trial.correct = False
			try:
				trial.answer = int(trial.keysString)
			except:
				trial.answer = 0
			if trial.answer == trial.targetPool.count(trial.target):
				trial.correct = True		
			if experiment.practice == True:
				self.practiceMode(experiment)
				self.myKeyboard.flush()	
			return(trial.answer, trial.correct)
			
		def practiceMode(self, experiment):
			'''Gives feedback if practice mode is on'''
			correctText = ("FALSE", "red")
			if trial.correct == True:
				correctText = ("CORRECT", "green")
			while True:
				feedbackText = visual.TextStim(win, text = correctText[0], color=correctText[1], pos=(0, 128), height=64, wrapWidth=700)
				feedbackText2 = visual.TextStim(win, text = "Press Q to exit practice mode.", color="black", pos=(0, -224), height=18, wrapWidth=700)
				feedbackText3 = visual.TextStim(win, text = "Otherwise, press space to continue in practice mode.", color="black", pos=(0, -256), height=18, wrapWidth=700)
				feedbackText.draw()
				feedbackText2.draw()
				feedbackText3.draw()
				win.flip()
				keys = self.myKeyboard.get_key()
				if 'q' in keys:
					experiment.practice = False
					print("Exiting practice mode...")
					break
				elif 'space' in keys:
					print("Running another practice trial.")
					break
				self.myKeyboard.flush()
			return experiment.practice
		
		def setContrasts(self, experiment):
			'''Increases or decreases stimuli contrast based on the response being correct or not'''
			if experiment.brightRedContrast != (0 or 1) and experiment.brightRedContrast == trial.redContrast:
				if trial.correct == True:
					experiment.brightRedContrast -= self.contrastParameter
				else:
					experiment.brightRedContrast += self.contrastParameter
			if experiment.darkRedContrast != (0 or 1) and experiment.darkRedContrast == trial.redContrast:
				if trial.correct == True:
					experiment.darkRedContrast -= self.contrastParameter
				else:
					experiment.darkRedContrast += self.contrastParameter
			if experiment.brightBlueContrast != (0 or 1) and experiment.brightBlueContrast == trial.blueContrast:
				if trial.correct == True:
					experiment.brightBlueContrast -= self.contrastParameter
				else:
					experiment.brightBlueContrast += self.contrastParameter
			if experiment.darkBlueContrast != (0 or 1) and experiment.darkBlueContrast == trial.blueContrast:
				if trial.correct == True:
					experiment.darkBlueContrast -= self.contrastParameter
				else:
					experiment.darkBlueContrast += self.contrastParameter
			
			return(experiment.brightRedContrast, experiment.darkRedContrast, experiment.brightBlueContrast, experiment.darkBlueContrast)
		
	newExperiment = experiment(practice = True)
	newExperiment.start()
	__end__
	set _prepare ""

define loop new_loop
	set source_file ""
	set source table
	set repeat "[=var.numTrials]"
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define loop new_loop_1
	set source_file ""
	set source table
	set repeat "[=var.loops]"
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence_1

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_point always
	run new_inline_script always
	run new_loop_1 always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_stimuli always
	run new_inline_script_1 always

define sketchpad present_stimuli
	set duration 100
	set description "Displays stimuli"
	draw circle color="#0000ff" fill=1 penwidth=1 r=125 show_if=always x=-256 y=0 z_index=0
	draw circle color="#aa0000" fill=1 penwidth=1 r=125 show_if=always x=256 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="[=letterListBlue\\[loopcounter\\]]" x=-256 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="[=letterListRed\\[loopcounter\\]]" x=256 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.1 <i>Jazzy James</i>" x=0 y=0 z_index=0

